PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pleaseworkstroopcontrol
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine trial
    RoutineSettingsComponent trial
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 5
      useWindowParams = True
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    KeyboardComponent press
      allowedKeys = 'm','z'
      correctAns = $key
      forceEndRoutine = True
      startVal [time (s)] = 0.01
      storeCorrect = True
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    CodeComponent clock
      Code Type = Auto->JS
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      Each Frame:
        if newClock.getTime() >= 900:
            stroop.finished = True
    TextComponent dot
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 5
      text = •
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    TextComponent text_stroop
      color [set every repeat] = $textColor
      letterHeight = 0.10
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.2
      text [set every repeat] = $stim1
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    CodeComponent audio_code
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import numpy as np

        audio_file = [
            "bird1.wav",
            "bird2.wav",
            "bird3.wav",
            "cafe1.wav",
            "cafe2.wav",
            "cafe3.wav",
            "construction1.wav",
            "construction2.wav",
            "construction3.wav",
            "subway1.wav",
            "subway2.wav",
            "subway3.wav",
            "rain1.wav",
            "rain2.wav",
            "rain3.wav",
            "stadium1.wav",
            "stadium2.wav",
            "stadium3.wav"
            ]


        word_counter = 0
        next_audio_trigger = np.random.uniform(2,3)
        play_audio = 0
      Begin Routine:
        import random
        import numpy as np

        random_audio_file = np.random.choice(audio_file)

        word_counter += 1
        if word_counter >= next_audio_trigger:
            random_audio_file = np.random.choice(audio_file)
            play_audio = np.random.uniform(0.4,0.8)
            word_counter = 0
            next_audio_trigger = np.random.uniform(2,3)

        else:
            play_audio = 0
    SoundComponent sound_1
      sound [set every repeat] = $random_audio_file
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $np.random.uniform(3,10)
      stopWithRoutine = False
      syncScreenRefresh = False
      volume [set every repeat] = play_audio
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  Routine welcome
    CodeComponent clock_setup
      Code Type = Auto->JS
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      Begin Experiment:
        newClock = core.Clock()
      End Routine:
        newClock.reset()
    RoutineSettingsComponent welcome
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    KeyboardComponent press_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_welcome
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention Seekers Stroop Task!
        Press z for inconsistent prompts, e.g. yellow pops up with color green.
        Press m for consistent prompts, e.g. red pops up with color red.
        Try to get as many correct as possible in 15 mins!

        Press SPACE key to continue.
  Routine fixation
    RoutineSettingsComponent fixation
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = time_fix
      useWindowParams = True
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    CodeComponent random_fixation
      Code Type = Auto->JS
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      Begin Routine:
        time_fix = np.random.uniform(1,6)
        thisExp.addData("time_fixation", time_fix)
    TextComponent dot_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = time_fix
      text = +
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  Routine thanks
    RoutineSettingsComponent thanks
      stopVal [duration (s)] = 30
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    TextComponent thank_you
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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Flow
  Routine welcome
  LoopInitiator stroop loopType="TrialHandler"
    conditionsFile = strooplist.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{'type': 'test', 'condition1': 'consistent', 'trialNo': 1, 'stim1': 'red', 'textColor': 'red', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 2, 'stim1': 'yellow', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 3, 'stim1': 'blue', 'textColor': 'red', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 4, 'stim1': 'red', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 5, 'stim1': 'orange', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 6, 'stim1': 'red', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'consistent', 'trialNo': 7, 'stim1': 'green', 'textColor': 'green', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 8, 'stim1': 'black', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 9, 'stim1': 'red', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000}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
    Routine trial
    Routine fixation
  LoopTerminator stroop
  Routine thanks
