PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1493, 933]
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 1
  rush = True
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Routines
  Routine trial
    RoutineSettingsComponent trial
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 5
      useWindowParams = True
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    CodeComponent clock
      Code Type = Auto->JS
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      Each Frame:
        if newClock.getTime() >= 900:
            stroop.finished = True
    KeyboardComponent key_resp
      allowedKeys = 'm','z'
      correctAns = $key
      forceEndRoutine = True
      startVal [time (s)] = 0.01
      storeCorrect = True
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    CodeComponent var_1_pic
      Code Type = Auto->JS
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      Begin Experiment:
        show_image = False
        next_image_trial = np.random.randint(3, 5)  # show after 5-10 trials
      Begin Routine:
        # List of image file paths
        image_list = [
            "movDist2.mp4",
            "movDist3.mp4",
            "movDist4.mp4",
            "movDist5.mp4",
            "movDist6.mp4",
            "movDist7.mp4",
            "movDist8.mp4",
            "movDist9.mp4",
            "movDist10.mp4",
            "movDist12.mp4",
            "movDist13.mp4",
            "movDist14.mp4",
            "movDist16.mp4",
            "movDist17.mp4",
            "movDist18.mp4",
            "movDist20.mp4",
            "movDist21.mp4",
            "movDist22.mp4"
        ]
        # We only want to pick ONE image out of the 30
        chosen_image = np.random.choice(image_list)

        image_duration = 0
    CodeComponent duration_pic
      Code Type = Auto->JS
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      Begin Routine:
        image_list = [
            "movDist2.mp4",
            "movDist3.mp4",
            "movDist4.mp4",
            "movDist5.mp4",
            "movDist6.mp4",
            "movDist7.mp4",
            "movDist8.mp4",
            "movDist9.mp4",
            "movDist10.mp4",
            "movDist12.mp4",
            "movDist13.mp4",
            "movDist14.mp4",
            "movDist16.mp4",
            "movDist17.mp4",
            "movDist18.mp4",
            "movDist20.mp4",
            "movDist21.mp4",
            "movDist22.mp4"
        ]

        # We only want to pick ONE image out of the 30
        chosen_image = np.random.choice(image_list)

        if stroop.thisN == next_image_trial:
            show_image = True
            image_duration = np.random.randint(1, 6)
        else:
            show_image = False
            image_duration = 0

        randomImage.opacity = int(show_image)  # 1 if True, 0 if False
    CodeComponent time_pic
      Code Type = Auto->JS
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      End Routine:
        if show_image:
            next_image_trial = stroop.thisN + np.random.randint(4, 12)
        show_image = False
    MovieComponent randomImage
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = $chosen_image
      opacity = int(show_image)
      pos [set every repeat] = [np.random.uniform(-0.5, 0.5), np.random.uniform(-0.5, 0.5)]
      size = 0.5,0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
      stopWithRoutine = False
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    TextComponent dot
      letterHeight = 0.05
      startVal [time (s)] = 0.7
      stopVal [time (s)] = 5
      text = •
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    TextComponent text_stroop
      color [set every repeat] = $textColor
      letterHeight = 0.10
      opacity [set every repeat] = 1
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.7
      text [set every repeat] = $stim1
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  Routine welcome
    RoutineSettingsComponent welcome
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    CodeComponent clock_setup
      Code Type = Auto->JS
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      Begin Experiment:
        newClock = core.Clock()
      End Routine:
        newClock.reset()
    TextComponent text_welcome
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention Seekers Stroop Task!
        Press z for inconsistent prompts, e.g. yellow pops up with color green.
        Press m for consistent prompts, e.g. red pops up with color red.
        Try to get as many correct as possible in 15 mins!

        Press SPACE key to continue.
    KeyboardComponent press_space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    RoutineSettingsComponent thanks
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    TextComponent thank_you
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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  Routine fixation
    RoutineSettingsComponent fixation
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = time_fix
      useWindowParams = True
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    CodeComponent random_fixation
      Code Type = Auto->JS
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      Begin Routine:
        time_fix = np.random.uniform(1,6)
        thisExp.addData("time_fixation", time_fix)
    TextComponent dot_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = time_fix
      text = +
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Flow
  Routine welcome
  LoopInitiator stroop loopType="TrialHandler"
    conditionsFile = strooplist.xlsx
    loopType = random
    nReps = 50
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    conditions:
      [{'type': 'test', 'condition1': 'consistent', 'trialNo': 1, 'stim1': 'red', 'textColor': 'red', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 2, 'stim1': 'yellow', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 3, 'stim1': 'blue', 'textColor': 'red', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 4, 'stim1': 'red', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 5, 'stim1': 'orange', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 6, 'stim1': 'red', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'consistent', 'trialNo': 7, 'stim1': 'green', 'textColor': 'green', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 8, 'stim1': 'black', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 9, 'stim1': 'red', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000}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
    Routine trial
    Routine fixation
  LoopTerminator stroop
  Routine thanks
