PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = degFlat
  Window size (pixels) = [1493, 933]
  color = -1.0000, -1.0000, -1.0000
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 1
  rush = True
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Routines
  Routine trial
    RoutineSettingsComponent trial
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 5
      useWindowParams = True
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    TextComponent text
      color [set every repeat] = $textColor
      letterHeight = 0.10
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.2
      text [set every repeat] = $stim1
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 5
      text = •
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    KeyboardComponent key_resp
      allowedKeys = 'm','z'
      correctAns = $key
      forceEndRoutine = True
      startVal [time (s)] = 0.01
      storeCorrect = True
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    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        if newClock.getTime() >= 900:
            stroop.finished = True
  Routine welcome
    RoutineSettingsComponent welcome
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    TextComponent text_2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention Seekers Stroop Task!
        Press z for inconsistent prompts, e.g. yellow pops up with color green.
        Press m for consistent prompts, e.g. red pops up with color red.
        Try to get as many correct as possible in 15 mins!

        Press SPACE key to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    RoutineSettingsComponent thanks
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    TextComponent text_3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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  Routine fixation
    RoutineSettingsComponent fixation
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = time_fix
      useWindowParams = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        time_fix = np.random.uniform(1,6)
        thisExp.addData("time_fixation", time_fix)
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = time_fix
      text = +
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  Routine fixation_1
    RoutineSettingsComponent fixation_1
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 60
      useWindowParams = True
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    TextComponent fix_rand_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 60
      text = +
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        newClock = core.Clock()
      End Routine:
        newClock.reset()
Flow
  Routine welcome
  Routine fixation_1
  LoopInitiator stroop loopType="TrialHandler"
    conditionsFile = strooplist.xlsx
    loopType = random
    nReps = 36
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    conditions:
      [{'type': 'test', 'condition1': 'consistent', 'trialNo': 1, 'stim1': 'red', 'textColor': 'red', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 2, 'stim1': 'yellow', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 3, 'stim1': 'blue', 'textColor': 'red', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 4, 'stim1': 'red', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 5, 'stim1': 'orange', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 6, 'stim1': 'red', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'consistent', 'trialNo': 7, 'stim1': 'green', 'textColor': 'green', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 8, 'stim1': 'black', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 9, 'stim1': 'red', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000}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
    Routine trial
    Routine fixation
  LoopTerminator stroop
  Routine thanks
