PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1493, 933]
  color = -1.0000, -1.0000, -1.0000
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 1
  rush = True
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Routines
  Routine trial
    RoutineSettingsComponent trial
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 5
      useWindowParams = True
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    TextComponent text
      color [set every repeat] = $textColor
      letterHeight = 0.10
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.2
      text [set every repeat] = $stim1
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 5
      text = •
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      correctAns = $key
      forceEndRoutine = True
      startVal [time (s)] = 0.01
      storeCorrect = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core, sound
        import random

        prefs.hardware['audioLib'] = ['ptb']
        prefs.hardware['audioLatencyMode'] = '3'

        audio_files = ['allaudio/coffee_fullaudio.mp3', 'allaudio/construction_fullaudio.mp3', 'allaudio/stadium_fullaudio.mp3']

        # Check if files exist before loading
        for file in audio_files:
            if not os.path.exists(file):
                print(f"ERROR: Audio file not found - {file}")
        # Preload all audio files into memory to avoid lag
        for sound_file in audio_files:
            preload = sound.Sound(sound_file, preload=True)
            print(f"Preloading {sound_file} ✔️")
        sounds = [sound.Sound(file, secs=-1, stereo=True) for file in audio_files if os.path.exists(file)]


        # Load the long audio file (1-hour clip)
        long_audio_file = np.random.choice(['allaudio/coffee_fullaudio.mp3', 'allaudio/construction_fullaudio.mp3', 'allaudio/stadium_fullaudio.mp3'])
        long_audio = sound.Sound(long_audio_file)

        # Timekeeping variables for auditory distraction
        next_audio_time = np.random.uniform(8, 20)
        audio_duration = np.random.uniform(3, 10)
        audio_end_time = 0
        current_sound = None

        # Create a global clock
        global_clock = core.Clock()
    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        prefs.hardware['audioLib'] = ['ptb']
        prefs.hardware['audioLatencyMode'] = '3'

        # Get the current time
        current_time = global_clock.getTime()

        # Randomized Auditory Distraction
        if current_time >= next_audio_time and current_sound is None:
            current_sound = random.choice(sounds)
            current_sound.setVolume(random.uniform(0.2, 0.7))
            current_sound.play()
            audio_end_time = current_time + audio_duration

        # Stop the audio if its duration has passed
        if current_sound is not None and current_time >= audio_end_time:
            current_sound.stop()
            current_sound = None
            next_audio_time = current_time + random.uniform(8, 20)
            audio_duration = random.uniform(3, 10)


        # Playing Random Segments from a 1-Hour Clip
        if current_sound is None:
            max_audio_length = 3600  # 1 hour in seconds
            random_start = random.uniform(0, max_audio_length - audio_duration)
            long_audio.setVolume(random.uniform(0.2, 0.7))
            long_audio.play(when=random_start)
            audio_end_time = current_time + audio_duration
    SoundComponent sound_1
      sound [set every repeat] = $audio_files
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $audio_duration
      volume [set every repeat] = current_sound
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    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        if newClock.getTime() >= 900:
            stroop.finished = True
  Routine welcome
    RoutineSettingsComponent welcome
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    TextComponent text_2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention Seekers Stroop Task!
        Press z for inconsistent prompts, e.g. yellow pops up with color green.
        Press m for consistent prompts, e.g. red pops up with color red.
        Try to get as many correct as possible in 15 mins!

        Press SPACE key to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy import core
        prefs.hardware['audioSampleRate'] = 44100
        newClock = core.Clock()

        prefs.hardware['audioLib'] = 'ptb'
        prefs.hardware['audioLatencyMode'] = '3'
      End Routine:
        newClock.reset()
  Routine thanks
    RoutineSettingsComponent thanks
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    TextComponent text_3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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  Routine fixation
    RoutineSettingsComponent fixation
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = time_fix
      useWindowParams = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        time_fix = np.random.uniform(1,6)
        thisExp.addData("time_fixation", time_fix)
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_fix
      text = +
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Flow
  Routine welcome
  LoopInitiator stroop loopType="TrialHandler"
    conditionsFile = strooplist.xlsx
    loopType = random
    nReps = 36
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    conditions:
      [{'type': 'test', 'condition1': 'consistent', 'trialNo': 1, 'stim1': 'red', 'textColor': 'red', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 2, 'stim1': 'yellow', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 3, 'stim1': 'blue', 'textColor': 'red', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 4, 'stim1': 'red', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 5, 'stim1': 'orange', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 6, 'stim1': 'red', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'consistent', 'trialNo': 7, 'stim1': 'green', 'textColor': 'green', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 8, 'stim1': 'black', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 9, 'stim1': 'red', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000}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
    Routine trial
    Routine fixation
  LoopTerminator stroop
  Routine thanks
