PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1493, 933]
  expName = stroop
  keyboardBackend = PsychToolbox
  runMode = 0
  rush = True
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Routines
  Routine trial
    RoutineSettingsComponent trial
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 5
      useWindowParams = True
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    CodeComponent code_8
      Code Type = Auto->JS
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      Each Frame:
        if newClock.getTime() >= 900:
            stroop.finished = True
    TextComponent text
      color [set every repeat] = $textColor
      letterHeight = 0.10
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.200
      text [set every repeat] = $stim1
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [time (s)] = 5
      text = •
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    KeyboardComponent key_resp
      allowedKeys = 'z','m'
      correctAns = $key
      forceEndRoutine = True
      startVal [time (s)] = 0.01
      storeCorrect = True
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        show_image = False
        next_image_trial = np.random.randint(3, 5)  # show after 5-10 trials
      Begin Routine:
        # List of image file paths
        image_list = [
            "alldist\dist1.jpg",
            "alldist\dist2.gif",
            "alldist\dist3.gif",
            "alldist\dist4.gif",
            "alldist\dist5.gif",
            "alldist\dist6.gif",
            "alldist\dist7.gif",
            "alldist\dist8.gif",
            "alldist\dist9.gif",
            "alldist\dist10.gif",
            "alldist\dist12.gif",
            "alldist\dist13.gif",
            "alldist\dist14.gif",
            "alldist\dist16.gif",
            "alldist\dist17.gif",
            "alldist\dist18.gif",
            "alldist\dist20.gif",
            "alldist\dist21.gif",
            "alldist\dist22.gif"
        ]

        # We only want to pick ONE image out of the 30
        chosen_image = np.random.choice(image_list)

        image_duration = 0

        # first time to show the image (in trial count)
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        image_list = [
            "alldist\dist1.jpg",
            "alldist\dist2.gif",
            "alldist\dist3.gif",
            "alldist\dist4.gif",
            "alldist\dist5.gif",
            "alldist\dist6.gif",
            "alldist\dist7.gif",
            "alldist\dist8.gif",
            "alldist\dist9.gif",
            "alldist\dist10.gif",
            "alldist\dist12.gif",
            "alldist\dist13.gif",
            "alldist\dist14.gif",
            "alldist\dist16.gif",
            "alldist\dist17.gif",
            "alldist\dist18.gif",
            "alldist\dist20.gif",
            "alldist\dist21.gif",
            "alldist\dist22.gif"
        ]

        # We only want to pick ONE image out of the 30
        chosen_image = np.random.choice(image_list)

        if stroop.thisN == next_image_trial:
            show_image = True
            image_duration = np.random.randint(1, 6)
        else:
            show_image = False
            image_duration = 0

        randomImage.opacity = int(show_image)  # 1 if True, 0 if False
    CodeComponent code_6
      Code Type = Auto->JS
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      End Routine:
        if show_image:

            next_image_trial = stroop.thisN + np.random.randint(5, 9)

        show_image = False
    ImageComponent randomImage
      image [set every repeat] = $chosen_image
      opacity = int(show_image)
      pos [set every repeat] = [np.random.uniform(-0.5, 0.5), np.random.uniform(-0.5, 0.5)]
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $image_duration
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  Routine welcome
    RoutineSettingsComponent welcome
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Experiment:
        newClock = core.Clock()
      End Routine:
        newClock.reset()
    TextComponent text_2
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Attention Seekers Stroop Task!
        Press z for inconsistent prompts, e.g. yellow pops up with color green.
        Press m for consistent prompts, e.g. red pops up with color red.
        Try to get as many correct as possible in 15 mins!

        Press SPACE key to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
    RoutineSettingsComponent thanks
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = 30
      useWindowParams = True
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    TextComponent text_3
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.035
      startVal [time (s)] = 0.0
      text = Thank you for participating!
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  Routine fixation
    RoutineSettingsComponent fixation
      color = -1.0000, -1.0000, -1.0000
      stopVal [duration (s)] = time_fix
      useWindowParams = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        time_fix = np.random.uniform(1,6)
        thisExp.addData("time_fixation", time_fix)
    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_fix
      text = +
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  Routine visual_2
    RoutineSettingsComponent visual_2
      color = -1.0000, -1.0000, -1.0000
      desc = $show_distraction
      useWindowParams = True
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        time_fix = np.random.uniform(1,6)
        thisExp.addData("time_fixation", time_fix)
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        distraction_image = np.random.choice([
            "dist1.jpg",
            "dist2.gif",
            "dist3.gif",
            "dist4.gif",
            "dist5.gif",
            "dist6.gif",
            "dist7.gif",
            "dist8.gif",
            "dist9.gif",
            "dist10.gif",
            "dist12.gif",
            "dist13.gif",
            "dist14.gif",
            "dist16.gif",
            "dist17.gif",
            "dist18.gif",
            "dist20.gif",
            "dist21.gif",
            "dist22.gif"
        ])
        thisExp.addData("distraction_image", distraction_image)
    ImageComponent image
      image [set every repeat] = $distraction_image
      pos [set every repeat] = [np.random.uniform(-0.5, 0.5), np.random.uniform(-0.5, 0.5)]
      size = (0.5,0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_fix
      units = norm
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Flow
  Routine welcome
  LoopInitiator stroop loopType="TrialHandler"
    conditionsFile = strooplist.xlsx
    loopType = random
    nReps = 36
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    conditions:
      [{'type': 'test', 'condition1': 'consistent', 'trialNo': 1, 'stim1': 'red', 'textColor': 'red', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 2, 'stim1': 'yellow', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 3, 'stim1': 'blue', 'textColor': 'red', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 4, 'stim1': 'red', 'textColor': 'green', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 5, 'stim1': 'orange', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 6, 'stim1': 'red', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'consistent', 'trialNo': 7, 'stim1': 'green', 'textColor': 'green', 'stimFormat': 'word', 'key': 'm', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 8, 'stim1': 'black', 'textColor': 'yellow', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000},
      {'type': 'test', 'condition1': 'inconsistent', 'trialNo': 9, 'stim1': 'red', 'textColor': 'blue', 'stimFormat': 'word', 'key': 'z', 'ITI': 800, 'presTime': 2000}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
    Routine trial
    Routine fixation
  LoopTerminator stroop
  Routine thanks
